CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:53
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâx80x99ll need to specify the image type as âx80x98Color imageâx80x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw_data
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:raw_data
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Original_CHCHD2
    Channel number:2
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    Image name:Original_CHCHD10

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Original_CHCHD2
    Name the output image:illum_CHCHD2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Original_CHCHD10
    Name the output image:illum_CHCHD10
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:Original_CHCHD2
    Name the output image:Corrected_CHCHD2
    Select the illumination function:illum_CHCHD2
    Select how the illumination function is applied:Divide
    Select the input image:Original_CHCHD10
    Name the output image:Corrected_CHCHD10
    Select the illumination function:illum_CHCHD10
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

GaussianFilter:[module_num:9|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
    Select the input image:Corrected_CHCHD10
    Name the output image:GF_Cells
    Sigma:1

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:GF_Cells
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):400,2000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
EditObjectsManually:[module_num:11|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
    Select the objects to be edited:Cells
    Name the edited objects:Edited_Cells
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Original_CHCHD10
    Allow overlapping objects?:Yes

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Corrected_CHCHD10, Corrected_CHCHD2
    Select objects to measure:Edited_Cells

MeasureImageIntensity:[module_num:13|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
    Select images to measure:Corrected_CHCHD10, Corrected_CHCHD2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Edited_Cells
    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,99

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BR_CHCHD2
    Image or measurement?:Image
    Select the first image:Corrected_CHCHD2
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:GF_CHCHD2
    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_1_Corrected_CHCHD2_Edited_Cells

ImageMath:[module_num:15|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BR_CHCHD10
    Image or measurement?:Image
    Select the first image:Corrected_CHCHD10
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:GF_CHCHD10
    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_1_Corrected_CHCHD10_Edited_Cells

GaussianFilter:[module_num:16|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
    Select the input image:BR_CHCHD2
    Name the output image:GF1_CHCHD2
    Sigma:1

GaussianFilter:[module_num:17|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
    Select the input image:BR_CHCHD2
    Name the output image:GF2_CHCHD2
    Sigma:2

GaussianFilter:[module_num:18|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
    Select the input image:BR_CHCHD10
    Name the output image:GF1_CHCHD10
    Sigma:1

GaussianFilter:[module_num:19|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
    Select the input image:BR_CHCHD10
    Name the output image:GF2_CHCHD10
    Sigma:2

ImageMath:[module_num:20|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notes:['DoG filter for CHCHD2']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GD_CHCHD2
    Image or measurement?:Image
    Select the first image:GF1_CHCHD2
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:GF2_CHCHD2
    Multiply the second image by:1
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
ImageMath:[module_num:21|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notes:['DoG filter for CHCHD10']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GD_CHCHD10
    Image or measurement?:Image
    Select the first image:GF1_CHCHD10
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:GF2_CHCHD10
    Multiply the second image by:1
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
MeasureImageIntensity:[module_num:22|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
    Select images to measure:GD_CHCHD10, GD_CHCHD2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Edited_Cells
    Calculate custom percentiles:No
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
ImageMath:[module_num:23|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Thresholded_CHCHD2
    Image or measurement?:Image
    Select the first image:GD_CHCHD2
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:3
    Measurement:Intensity_StdIntensity_GD_CHCHD2_Edited_Cells
    Image or measurement?:Measurement
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    Multiply the third image by:1.0
    Measurement:Intensity_MeanIntensity_GD_CHCHD2_Edited_Cells

ImageMath:[module_num:24|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Thresholded_CHCHD10
    Image or measurement?:Image
    Select the first image:GD_CHCHD10
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:3
    Measurement:Intensity_StdIntensity_GD_CHCHD10_Edited_Cells
    Image or measurement?:Measurement
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    Multiply the third image by:1
    Measurement:Intensity_MeanIntensity_GD_CHCHD10_Edited_Cells

IdentifyPrimaryObjects:[module_num:25|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notes:['']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
    Select the input image:Thresholded_CHCHD2
    Name the primary objects to be identified:CHCHD2
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.000025,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:26|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
    Select the input image:Thresholded_CHCHD10
    Name the primary objects to be identified:CHCHD10
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.00005,1
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    Log transform before thresholding?:No
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
DilateObjects:[module_num:27|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
    Select the input object:CHCHD10
    Name the output object:Dilated_CHCHD10
    Structuring element:disk,1

MeasureObjectIntensityDistribution:[module_num:28|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
    Select images to measure:Thresholded_CHCHD10
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:Dilated_CHCHD10
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:2
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    Image:None
    Objects to display:Do not use
    Number of bins:2
    Measurement:Fraction at Distance
    Color map:Blues
    Save display as image?:No
    Output image name:Heatmap

FilterObjects:[module_num:29|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
    Select the objects to filter:Dilated_CHCHD10
    Name the output objects:Filtered_CHCHD10
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:RadialDistribution_MeanFrac_Thresholded_CHCHD10_1of2
    Filter using a minimum measurement value?:Yes
    Minimum value:1.8
    Filter using a maximum measurement value?:No
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
ErodeObjects:[module_num:30|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
    Select the input object:Filtered_CHCHD10
    Name the output object:Eroded_CHCHD10
    Structuring element:disk,1
    Prevent object removal:Yes
    Relabel resulting objects:No

RelateObjects:[module_num:31|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
    Parent objects:Edited_Cells
    Child objects:CHCHD2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CHCHD2_within_cells
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
RelateObjects:[module_num:32|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
    Parent objects:Edited_Cells
    Child objects:Eroded_CHCHD10
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CHCHD10_within_cells
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
MaskObjects:[module_num:33|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
    Select objects to be masked:CHCHD10_within_cells
    Name the masked objects:colocalized_regions
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CHCHD2_within_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:34|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notes:['The MeasureImageAreaOccupied module measure various statistics associated with the area taken up by a feature in an image. In this case, we are concerned with Objects1 and ColocalizedRegion. The module counts all the pixels occupied by an given object set and adds them together for the total area occupied by each stained object']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
    Measure the area occupied by:Objects
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    Select object sets to measure:CHCHD10_within_cells, CHCHD2_within_cells, Edited_Cells, colocalized_regions

CalculateMath:[module_num:35|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
    Name the output measurement:CHCHD2_Area_Percentage
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_CHCHD2_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:36|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
    Name the output measurement:CHCHD10_Area_Percentage
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_CHCHD10_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:37|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
    Name the output measurement:Colocalized_Area_Percentage_In_the_Cell
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:38|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
    Name the output measurement:Colocalized_Area_Percentage_In_CHCHD2
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_CHCHD2_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:39|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
    Name the output measurement:Colocalized_Area_Percentage_In_CHCHD10
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_CHCHD10_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:40|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
    Name the output measurement:Normalized_CHCHD2_Intensity
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Edited_Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_Corrected_CHCHD2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:41|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
    Name the output measurement:Normalized_CHCHD10_Intensity
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Edited_Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_Corrected_CHCHD10
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureColocalization:[module_num:42|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
    Select images to measure:Thresholded_CHCHD10, Thresholded_CHCHD2
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Edited_Cells
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Accurate

RescaleIntensity:[module_num:43|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
    Select the input image:GF_Cells
    Name the output image:Rescaled_cell_outline
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:44|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescaled_cell_outline
    Name the output image:cell_outline
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FF06
    Select objects to display:CHCHD10_within_cells
    Select outline color:#FB0207
    Select objects to display:CHCHD2_within_cells

SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:cell_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_CHCHD10_aggregation/WT_HET_HOM_110723/results/SN_CHCHD2_KO
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:46|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
    Display object or image measurements?:Object
    Select the input objects:CHCHD2_within_cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:BR_CHCHD2
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_CHCHD2
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

OverlayObjects:[module_num:47|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enabled:False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
    Input:Original_CHCHD10
    Name the output image:OverlayObjects
    Objects:CHCHD10_within_cells
    Opacity:0.3

SaveImages:[module_num:48|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_CHCHD2
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CHCHD2
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_CHCHD10_aggregation/WT_HET_HOM_110723/results/SN_CHCHD2_KO
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:49|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
    Display object or image measurements?:Object
    Select the input objects:CHCHD10_within_cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:BR_CHCHD10
    Text color:#00F500
    Name the output image that has the measurements displayed:DisplayImage_CHCHD10
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_CHCHD10
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CHCHD10
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_CHCHD10_aggregation/WT_HET_HOM_110723/results/SN_CHCHD2_KO
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:51|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
    Display object or image measurements?:Object
    Select the input objects:colocalized_regions
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:BR_CHCHD2
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_colocalization_region
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_colocalization_region
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_colocalized_species
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_CHCHD10_aggregation/WT_HET_HOM_110723/results/SN_CHCHD2_KO
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:53|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_CHCHD10_aggregation/WT_HET_HOM_110723/results/SN_CHCHD2_KO
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Edited_Cells|Math_Normalized_CHCHD10_Intensity,Edited_Cells|Math_Normalized_CHCHD2_Intensity,Edited_Cells|Intensity_IntegratedIntensity_Corrected_CHCHD10,Edited_Cells|Intensity_IntegratedIntensity_Corrected_CHCHD2,Edited_Cells|Number_Object_Number,Edited_Cells|Correlation_Manders_Thresholded_CHCHD10_Thresholded_CHCHD2,Edited_Cells|Correlation_Manders_Thresholded_CHCHD2_Thresholded_CHCHD10,Edited_Cells|Correlation_Correlation_Thresholded_CHCHD10_Thresholded_CHCHD2,Image|AreaOccupied_AreaOccupied_colocalized_regions,Image|AreaOccupied_AreaOccupied_CHCHD2_within_cells,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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