CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:74
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâx80x99ll need to specify the image type as âx80x98Color imageâx80x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw_data
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:raw_data
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Original_Mitochondria
    Channel number:2
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    Image name:Original_CHCHD2

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Original_CHCHD2
    Name the output image:illum_CHCHD2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Original_Mitochondria
    Name the output image:illum_Mitochondria
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:Original_CHCHD2
    Name the output image:Corrected_CHCHD2
    Select the illumination function:illum_CHCHD2
    Select how the illumination function is applied:Divide
    Select the input image:Original_Mitochondria
    Name the output image:Corrected_Mitochondria
    Select the illumination function:illum_Mitochondria
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

GaussianFilter:[module_num:9|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
    Select the input image:Corrected_CHCHD2
    Name the output image:GF_Cells
    Sigma:1

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:GF_Cells
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):400,2000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
EditObjectsManually:[module_num:11|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
    Select the objects to be edited:Cells
    Name the edited objects:Edited_Cells
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Original_CHCHD2
    Allow overlapping objects?:Yes

MedianFilter:[module_num:12|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
    Select the input image:Corrected_CHCHD2
    Name the output image:Median_CHCHD2
    Window:10

MeasureImageIntensity:[module_num:13|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
    Select images to measure:Corrected_CHCHD2, Corrected_Mitochondria, Median_CHCHD2
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Edited_Cells
    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,90

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Thresholded_CHCHD2
    Image or measurement?:Image
    Select the first image:Median_CHCHD2
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:GF_2_CHCHD2
    Multiply the second image by:1
    Measurement:Intensity_StdIntensity_Median_CHCHD2_Edited_Cells
    Image or measurement?:Measurement
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    Multiply the third image by:1.0
    Measurement:Intensity_MeanIntensity_Median_CHCHD2_Edited_Cells

GaussianFilter:[module_num:15|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
    Select the input image:Corrected_Mitochondria
    Name the output image:GF_1_Mito
    Sigma:1

GaussianFilter:[module_num:16|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
    Select the input image:Corrected_Mitochondria
    Name the output image:GF_2_Mito
    Sigma:50

ImageMath:[module_num:17|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GD_Mito
    Image or measurement?:Image
    Select the first image:GF_1_Mito
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GF_2_Mito
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:18|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
    Select the input image:Thresholded_CHCHD2
    Name the output image:Rescaled_CHCHD2
    Rescaling method:Divide by the image's maximum
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
IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:Rescaled_CHCHD2
    Name the primary objects to be identified:Total_CHCHD2
    Typical diameter of objects, in pixel units (Min,Max):3,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:5
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:GD_Mito
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):4,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

GaussianFilter:[module_num:21|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
    Select the input image:Thresholded_CHCHD2
    Name the output image:GF_1_CHCHD2
    Sigma:1

GaussianFilter:[module_num:22|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
    Select the input image:Thresholded_CHCHD2
    Name the output image:GF_2_CHCHD2
    Sigma:4

ImageMath:[module_num:23|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GD_CHCHD2
    Image or measurement?:Image
    Select the first image:GF_1_CHCHD2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GF_2_CHCHD2
    Multiply the second image by:1
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
EnhanceOrSuppressFeatures:[module_num:24|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enabled:False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
    Select the input image:GD_CHCHD2
    Name the output image:Enhanced_CHCHD2
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:25|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notes:['']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
    Select the input image:GD_CHCHD2
    Name the primary objects to be identified:Puncta_CHCHD2
    Typical diameter of objects, in pixel units (Min,Max):2,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:2.5
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:5
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    Thresholding method:Otsu

DilateObjects:[module_num:26|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
    Select the input object:Puncta_CHCHD2
    Name the output object:Dilated_Puncta_CHCHD2
    Structuring element:disk,2

MeasureObjectIntensityDistribution:[module_num:27|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
    Select images to measure:Original_CHCHD2
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Dilated_Puncta_CHCHD2
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:2
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
FilterObjects:[module_num:28|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
    Select the objects to filter:Dilated_Puncta_CHCHD2
    Name the output objects:Filtered_Puncta_CHCHD2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:RadialDistribution_MeanFrac_Original_CHCHD2_1of2
    Filter using a minimum measurement value?:Yes
    Minimum value:1.02
    Filter using a maximum measurement value?:No
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
ErodeObjects:[module_num:29|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
    Select the input object:Filtered_Puncta_CHCHD2
    Name the output object:Eroded_Puncta_CHCHD2
    Structuring element:disk,2
    Prevent object removal:Yes
    Relabel resulting objects:No

RelateObjects:[module_num:30|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
    Parent objects:Edited_Cells
    Child objects:Eroded_Puncta_CHCHD2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Puncta_CHCHD2_within_cells
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
RelateObjects:[module_num:31|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
    Parent objects:Edited_Cells
    Child objects:Total_CHCHD2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Total_CHCHD2_within_cells
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
RelateObjects:[module_num:32|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
    Parent objects:Edited_Cells
    Child objects:Mitochondria
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Mitochondria_within_cells
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
MeasureObjectIntensity:[module_num:33|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
    Select images to measure:Corrected_CHCHD2, Corrected_Mitochondria
    Select objects to measure:Edited_Cells

MeasureObjectIntensity:[module_num:34|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
    Select images to measure:Corrected_CHCHD2
    Select objects to measure:Total_CHCHD2_within_cells

MeasureObjectIntensity:[module_num:35|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
    Select images to measure:Corrected_CHCHD2
    Select objects to measure:Puncta_CHCHD2_within_cells

MeasureObjectIntensity:[module_num:36|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
    Select images to measure:Corrected_Mitochondria
    Select objects to measure:Mitochondria_within_cells

MeasureObjectSizeShape:[module_num:37|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
    Select object sets to measure:Mitochondria_within_cells, Puncta_CHCHD2_within_cells, Total_CHCHD2_within_cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MaskObjects:[module_num:38|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
    Select objects to be masked:Total_CHCHD2_within_cells
    Name the masked objects:colocalized_regions_total
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Mitochondria_within_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:39|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
    Select objects to be masked:Puncta_CHCHD2_within_cells
    Name the masked objects:colocalized_regions_puncta
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Mitochondria_within_cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:40|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notes:['The MeasureImageAreaOccupied module measure various statistics associated with the area taken up by a feature in an image. In this case, we are concerned with Objects1 and ColocalizedRegion. The module counts all the pixels occupied by an given object set and adds them together for the total area occupied by each stained object']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
    Measure the area occupied by:Objects
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    Select object sets to measure:Edited_Cells, Mitochondria_within_cells, Puncta_CHCHD2_within_cells, Total_CHCHD2_within_cells, colocalized_regions_puncta, colocalized_regions_total

CalculateMath:[module_num:41|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
    Name the output measurement:Puncta_CHCHD2_Area_Percentage
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_Puncta_CHCHD2_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:42|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
    Name the output measurement:Total_CHCHD2_Area_Percentage
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_Total_CHCHD2_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:43|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
    Name the output measurement:Mitochondria_Area_Percentage
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_Mitochondria_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:44|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
    Name the output measurement:Colocalized_Puncta_Area_Percentage_In_the_Cell
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions_puncta
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:45|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
    Name the output measurement:Colocalized_Total_Area_Percentage_In_the_Cell
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions_total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:46|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
    Name the output measurement:Colocalized_Puncta_Area_Percentage_In__Total_CHCHD2
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions_puncta
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Total_CHCHD2_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:47|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
    Name the output measurement:Colocalized_Puncta_Area_Percentage_In__Puncta_CHCHD2
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions_puncta
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Puncta_CHCHD2_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:48|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
    Name the output measurement:Colocalized_Total_Area_Percentage_In_Total_CHCHD2
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions_total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Total_CHCHD2_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:49|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
    Name the output measurement:Colocalized_Puncta_Area_Percentage_In_Mitochondria
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions_puncta
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Mitochondria_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:50|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
    Name the output measurement:Colocalized_Total_Area_Percentage_In_Mitochondria
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_colocalized_regions_total
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Mitochondria_within_cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:51|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
    Name the output measurement:Normalized_Total_CHCHD2_Intensity
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Edited_Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_Corrected_CHCHD2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:52|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
    Name the output measurement:Normalized_Mitochondria_Intensity
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Edited_Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_Corrected_Mitochondria
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Edited_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureColocalization:[module_num:53|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
    Select images to measure:Corrected_CHCHD2, Corrected_Mitochondria
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Edited_Cells
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Accurate

RescaleIntensity:[module_num:54|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
    Select the input image:Corrected_CHCHD2
    Name the output image:Rescaled_FInal_CHCHD2
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:55|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
    Select the input image:Corrected_Mitochondria
    Name the output image:Rescaled_FInal_Mito
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:56|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescaled_FInal_CHCHD2
    Name the output image:cell_outline
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FF06
    Select objects to display:Total_CHCHD2_within_cells
    Select outline color:#FB0207
    Select objects to display:Mitochondria_within_cells
    Select outline color:Blue
    Select objects to display:Puncta_CHCHD2_within_cells

OverlayOutlines:[module_num:57|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescaled_FInal_CHCHD2
    Name the output image:total_CHCHD2
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FF06
    Select objects to display:Total_CHCHD2_within_cells

OverlayOutlines:[module_num:58|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescaled_FInal_CHCHD2
    Name the output image:puncta_CHCHD2
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#0000FF
    Select objects to display:Puncta_CHCHD2_within_cells

OverlayOutlines:[module_num:59|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescaled_FInal_Mito
    Name the output image:mitochondria
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB0207
    Select objects to display:Mitochondria_within_cells

SaveImages:[module_num:60|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
    Select the type of image to save:Image
    Select the image to save:cell_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:61|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
    Select the type of image to save:Image
    Select the image to save:total_CHCHD2
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay_total_CHCHD2
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:puncta_CHCHD2
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay_puncta_CHCHD2
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:mitochondria
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay_miotochondria
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:64|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
    Display object or image measurements?:Object
    Select the input objects:Total_CHCHD2_within_cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:GD_CHCHD2
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_Total_CHCHD2
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:65|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_Total_CHCHD2
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Total_CHCHD2
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:66|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
    Display object or image measurements?:Object
    Select the input objects:Puncta_CHCHD2_within_cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:GD_CHCHD2
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_Puncta_CHCHD2
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:67|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_Puncta_CHCHD2
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Puncta_CHCHD2
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:68|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
    Display object or image measurements?:Object
    Select the input objects:Mitochondria_within_cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:GD_Mito
    Text color:#FB0207
    Name the output image that has the measurements displayed:DisplayImage_Mitochondria
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:69|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_Mitochondria
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Mitochondria
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:70|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
    Display object or image measurements?:Object
    Select the input objects:colocalized_regions_total
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:GD_CHCHD2
    Text color:#21FF06
    Name the output image that has the measurements displayed:DisplayImage_colocalization_region_total
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:71|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_colocalization_region_total
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_colocalized_total_species
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:72|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
    Display object or image measurements?:Object
    Select the input objects:colocalized_regions_puncta
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:GD_CHCHD2
    Text color:#21FF06
    Name the output image that has the measurements displayed:DisplayImage_colocalization_region_puncta
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:73|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_colocalization_region_puncta
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_data
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_colocalized_puncta_species
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:74|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Nakamura Lab/Kohei/Projects/CHCHD2/CHCHD2_PDH_re-imaging/Analysis/VTA_#947
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Edited_Cells|Math_Normalized_Mitochondria_Intensity,Edited_Cells|Number_Object_Number,Total_CHCHD2_within_cells|AreaShape_Area,Total_CHCHD2_within_cells|Intensity_IntegratedIntensity_Corrected_CHCHD2,Total_CHCHD2_within_cells|Number_Object_Number,Mitochondria_within_cells|AreaShape_Area,Mitochondria_within_cells|Intensity_IntegratedIntensity_Corrected_Mitochondria,Mitochondria_within_cells|Number_Object_Number,Image|AreaOccupied_TotalArea_colocalized_regions_total,Image|AreaOccupied_TotalArea_colocalized_regions_puncta,Image|AreaOccupied_TotalArea_Total_CHCHD2_within_cells,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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